PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '1', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = untitled
  keyboardBackend = ioHub
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Routines
  Routine instruction
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in this experiment

        Press "space" to start
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thx
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in this experiment

        Press "space" to exit
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine JudmentTrial
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Judgement
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    SliderComponent slider
      flip = True
      forceEndRoutine = True
      granularity = 1
      labels = ['Definitely false', 'Very unlikely','Unlikely','Somewhat unlikely', 'Neither likely nor unlikely', 'Somwhat likely true', 'Likely true', 'Very likely true', 'Definitely true']
      letterHeight = 0.02
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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  Routine CategoricalTrial
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Categorical
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    SliderComponent slider_2
      flip = True
      forceEndRoutine = True
      granularity = 1
      labels = ['Definitely false', 'Very unlikely','Unlikely','Somewhat unlikely', 'Neither likely nor unlikely', 'Somwhat likely true', 'Likely true', 'Very likely true', 'Definitely true']
      letterHeight = 0.02
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styleTweaks = ('labels45',)
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9)
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  Routine break_2
  Routine rest
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You can have a little break
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Exit
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please wait while we save your results...
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    CodeComponent code
      Code Type = JS
      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
            return Object.values(it).toString()
        }).join('\n')

        // Send data to OSF via DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'zoataSOOngVX', // ⭑ UPDATE WITH YOUR DATAPIPE EXPERIMENT ID ⭑
                filename: filename,
                data: data,
            }),
        }).then(response => response.json()).then(data => {
            // Log response and force experiment end
            console.log(data);
            quitPsychoJS();
        })
Flow
  Routine instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = JudjCond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Judgement': 'A goat has goat DNA because it can give milk.'},
      {'Judgement': 'A goat has goat DNA because it has four legs.'},
      {'Judgement': 'A goat can give milk because it has goat DNA'},
      {'Judgement': 'A goat can give milk because it has four legs.'},
      {'Judgement': 'A goat has four legs because it has goat DNA'},
      {'Judgement': 'A goat has four legs because it can give milk.'},
      {'Judgement': 'An oak tree contains cellulose because it provides shade.'},
      {'Judgement': 'An oak tree contains cellulose because it has a thick trunk.'},
      {'Judgement': 'An oak tree provides shade because it contains cellulose.'},
      {'Judgement': 'An oak tree provides shade because it has a thick trunk.'},
      {'Judgement': 'An oak tree has a thick trunk because it contains cellulose.'},
      {'Judgement': 'An oak tree has a thick trunk because it provides shade.'},
      {'Judgement': 'Tires are made of rubber because they can roll.'},
      {'Judgement': 'Tires are made of rubber because they are filled with air.'},
      {'Judgement': 'Tires can roll because they are made of rubber.'},
      {'Judgement': 'Tires can roll because they are filled with air.'},
      {'Judgement': 'Tires are filled with air because they are made of rubber.'},
      {'Judgement': 'Tires are filled with air because they can roll.'},
      {'Judgement': 'Gold has its atomic structure (AU) because it is used in jewelry.'},
      {'Judgement': 'Gold has its atomic structure (AU) because it is yellow.'},
      {'Judgement': 'Gold is used in jewelry because it has its atomic structure (AU).'}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
    Routine JudmentTrial
  LoopTerminator trials
  Routine rest
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = CategCond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Categorical': 'Would a goat still be a goat if it did not have goat DNA?'},
      {'Categorical': 'Would a goat still be a goat if it could not give milk?'},
      {'Categorical': 'Would a goat still be a goat if it did not have four legs?'},
      {'Categorical': 'Would an oak tree still be an oak tree if it did not contain cellulose?'},
      {'Categorical': 'Would an oak tree still be an oak tree if it could not provide shade?'},
      {'Categorical': 'Would an oak tree still be an oak tree if it did not have a thick trunk?'},
      {'Categorical': 'Would a tire still be a tire if it were not made of rubber?'},
      {'Categorical': 'Would a tire still be a tire if it could not roll?'},
      {'Categorical': 'Would a tire still be a tire if it were not filled with air?'},
      {'Categorical': 'Would gold still be gold if it did not have its atomic structure (AU)?'},
      {'Categorical': 'Would gold still be gold if it could not be used in jewelry?'},
      {'Categorical': 'Would gold still be gold if it were not yellow?'},
      {'Categorical': "Is the camera still a camera if it's not made of metal and plastic?"},
      {'Categorical': "Is the camera still a camera if it can't be used to take pictures?"},
      {'Categorical': "Is the camera still a camera if it doesn't have a lens?"},
      {'Categorical': "Is the laptop still a laptop if it's not made of metal and plastic?"},
      {'Categorical': "Is the laptop still a laptop if it can't be used for computing?"},
      {'Categorical': "Is the laptop still a laptop if it doesn't have a keyboard?"}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
    Routine CategoricalTrial
  LoopTerminator trials_2
  Routine thx
